PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'lang001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 1600]
  expName = language_cz_foreign_recognition
  keyboardBackend = ioHub
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Routines
  Routine trial
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine introduction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Zde bude úvodní text blablabla

        pro pokračování styiskněte mezerník
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Za chvíli se spustí nahrávka
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    TextComponent text_trialN
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $f'Opakování {trials.thisN+1} z 25ti'
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  Routine trial_sound
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    SoundComponent sound_trial
      durationEstim = 30
      sound [set every repeat] = $stimulus
      startVal [time (s)] = 0.0
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  Routine trial_language_choice
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    ButtonComponent button_czstandard
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.75, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      text = Standardní čeština
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    ButtonComponent button_cznonstandard
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      text = Nestandardní čeština
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    ButtonComponent button_foreign
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75,0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      text = Cizí jazyk
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    TextComponent text_language_choice
      letterHeight = 0.05
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text = Vybertes ...... text
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  Routine trial_certainty_choice
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    SliderComponent slider_certaity
      forceEndRoutine = True
      granularity = 0
      labels = "Vůbec ne", "Ne moc", "Středně jistá*ý", "Celkem jistá*ý", "Naprosto jistá*ý"
      letterHeight = 0.04
      pos = (0, -0.25)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_certainty
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
      text = JKak moc jste si jistí .....
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  Routine thank_you
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Děkujeme za váš čas
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  Routine testsettings
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'settings/' + str(expInfo['participant']) + '.xlsx'
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  Routine code_checker
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    CodeComponent code_checksettings
      Code Type = Py
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      Before Experiment:
        import os
      Begin Routine:
        settings_path = f'settings/{expInfo["participant"]}.xlsx'
        print(settings_path)
        if not os.path.exists(settings_path):
            print(f"The file {settings_path} does not exist.")
            core.quit()
Flow
  Routine code_checker
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $settings_path
    loopType = sequential
    nReps = 1
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    Routine trial_introduction
    Routine trial_sound
    Routine trial_language_choice
    Routine trial_certainty_choice
  LoopTerminator trials
  Routine thank_you
